<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var rows = 8;
var headMode = [2,1,rows,12].join(&quot;,&quot;);
var volume = {};
/*
volume.dilution = parseFloat(formDilutionVolume);
volume.sample = parseFloat(formSampleVolume);
volume.marker = parseFloat(formMarkerVolume);
volume.analyte = parseFloat(formAnalyteVolume);
*/
volume.dilution = 150;
volume.sample = 1;
volume.marker = 22;
volume.analyte = 2;
volume.total = volume.sample + volume.dilution;
var skipDilution = !volume.dilution || volume.dilution &lt; 0; 
var MAX_TIP_VOLUME = 170;' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='DistributeMarker' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='DistributeMarker' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferAnalyte' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferAnalyte' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='FraggePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec half skirt PCR in Red Alum Insert' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='DistributeMarker' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='DistributeMarker' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(rows &lt; 8) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Replace tipbox' />
						<Parameter Category='' Name='Body' Value='Replace the tipbox in position 2 with a new tipbox containing 8 rows of clean tips. Press &apos;Continue&apos; when done.' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='SampleDilution' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='SampleDilution' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferAnalyte' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferAnalyte' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='MarkerTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='DistributeMarker' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='DistributeMarker' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferAnalyte' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferAnalyte' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='SampleDilution' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='SampleDilution' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferAnalyte' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferAnalyte' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='DilutionPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='SampleDilution' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='SampleDilution' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferAnalyte' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferAnalyte' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SamplePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='DistributeMarker' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='DistributeMarker' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='MarkerPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='SampleDilution' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='SampleDilution' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='DilutionBuffer' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='DistributeMarker' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = volume.marker;	// Volume to dispense per well
var rowsDone = 0;	// Number of rows dispensed so far
var deadVolume = 5;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * rows;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((MAX_TIP_VOLUME - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;2&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='1' SubsetConfig='2' SubsetType='2' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MarkerTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;2&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;7&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Volume left to transfer:
var volumeLeft = (rows - rowsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MarkerPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[++rowsDone,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='FraggePlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(rows == rowsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Tiptouchretractdistance = -14.5;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MarkerPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='15' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='SampleDilution' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = MAX_TIP_VOLUME;
var mHeadMode = headMode;
var mWellSelection = [[1,1]];
var mTipSelection = (rows&gt;7) ? [[1,1]] : [[8-rows,1]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_normal_large_vol&quot;;
var mPreAspVolume = 10;
var mTransferVolume = volume.dilution;
var mAspDistance = 1;
var mDispDistance = 2;
var mMixVolume = (volume.total&gt;200) ? 160 : 0.8*volume.total;
var mMixLiquidClass = &quot;j_normal_mixing&quot;;
var mMixCycles = 10;
var mMixAspDistance = 1;
var mMixDispDistance = 1;
var mBlowoutHeight = 5;
var mDoTipTouch = true;
var mTouchRetract = -4;
var oneStep = volume.total &lt; MAX_TIP_VOLUME; ' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(skipDilution) task.skip();
if(rows &lt; 8) task.Wellselection = [[8-rows,1]];
if(mGetTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MarkerTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;2&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='1' SubsetType='2' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(skipDilution) task.skip();
if(mPreAspVolume == 0) {
   task.skip();
}
task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DilutionBuffer' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = skipDilution ? 0 : Math.ceil(mTransferVolume / maxVolume);' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(skipDilution) task.skip();
task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DilutionBuffer' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(oneStep || skipDilution) task.skip();
task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DilutionPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(oneStep || skipDilution) task.skip();
task.Wellselection = mWellSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DilutionPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(skipDilution) task.skip();
task.Wellselection = mWellSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.sample' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='1' SubsetType='2' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(skipDilution) task.skip();
task.Wellselection = mWellSelection;
task.Volume = oneStep? volume.total : volume.sample;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DilutionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='if(skipDilution) task.skip();
if(mMixVolume &gt; maxVolume) {
   mMixVolume = maxVolume * 0.8;
}
task.Volume = mMixVolume;
task.Mixcycles = mMixCycles;
task.Liquidclass = mMixLiquidClass;
task.Aspiratedistance = mMixAspDistance;
if(mMixAspDistance != mMixDispDistance) {
   task.Dispenseatdifferentdistance = true;
   task.Dispensedistance = mMixDispDistance;
}
task.Wellselection = mWellSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DilutionPlate' />
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						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(skipDilution) task.skip();
if(mPreAspVolume == 0 &amp;&amp; !mDoTipTouch) {
   task.skip();
}
task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_blowout&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;None&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DilutionPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(skipDilution) task.skip();
if(rows &lt; 8) task.Wellselection = [[8-rows,1]];
if(mReturnTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MarkerTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;2&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TransferAnalyte' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(rows &lt; 8) task.Wellselection = [[8-rows,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MarkerTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='1' SubsetType='2' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='SamplePlate' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(skipDilution) task.Location_plate = &quot;SamplePlate&quot;; ' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DilutionPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.analyte' Value='' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='FraggePlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.analyte' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Volume = 0.7 * (volume.analyte + volume.marker)' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='FraggePlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='FraggePlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-6' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(rows &lt; 8) {
  task.Wellselection = [[2,1]];
} else {
  task.Location_plate = &quot;MarkerTips&quot;;
  task.Wellselection = [[1,1]];
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;2&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>