Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoUnloadRacks: 1
  Device_File: C:\Documents and Settings\joel\Desktop\Bender Device Files\Full_System_Magnet_red6.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::JavaScript
      TaskScript:
        var global = GetGlobalObject();
        //var numberOfColumns = 3;
        var numberOfColumns = parseInt(global.formColumns);
        var roomTemp = 22;
        var headMode = "1,3,1," + numberOfColumns;
        var preAspVol = 5;
        var preAspDist = 30;
        var mixCycles = 5;
        //Set simulation on/off
        var simulationToggle = parseInt(global.simulationToggle);
        //Skip timers Yes/No
        var timerSkip = parseInt(global.timerSkip);
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript:
        if(simulationToggle == true) {
        task.skip();
        }
      Location: 4
      Temperature: 35
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript:
        if(simulationToggle == true) {
        task.skip();
        }
      Location: 6
      Temperature: 4
      Timeout: 1
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Main_Processes
  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: AddAdapter3Mix
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::User Message
      Title: Denaturate for 2 min
      Body:
        Take the plate from position 6, seal it, then put it on the thermal cycler and incubate at 70 deg for 2 minutes.

        Immediately spin it down, remove the seal, replace it on position 6 and click Continue.
      Pause process: 1
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    Task Bravo::SubProcess
      Sub-process name: AddLigationMix
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    Task BuiltIn::User Message
      Title: Ligate 3' Adapter
      Body:
        Take the plate from position 6, seal it, then put it on a thermal cycler (with heated lid) and incubate at 28 deg for 1 hour.

        After incubation, immediately spin it down, remove the seal, replace it on position 6 and click Continue.
      Pause process: 1
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    Task BuiltIn::Spawn Process
      Process to spawn: SamplePlate2
  Process
    Plate name: SamplePlate2
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: AddStopSolution
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::User Message
      Title: Add the RNA 5' Adapter mix to column 4
      Body:
        Denaturate the RNA 5' Adapter in a separate tube at 70 deg for 2 min, immediately put on ice, then add ATP and T4 RNA Ligase.

        Add the RNA 5' Adapter Mix to column 4 on the reagent plate on position 9.

        Then, click Continue.
      Pause process: 1
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    Task Bravo::SubProcess
      Sub-process name: AddAdapter5Mix
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    Task BuiltIn::User Message
      Title: Ligate 5' Adapter
      Body:
        Take the plate from position 6, seal it, then put it on a thermal cycler (with heated lid) and incubate at 28 deg for 1 hour.

        After incubation, immediately spin the plate down, remove the seal, put it back on position 6 and click Continue.
      Pause process: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
  Process
    Plate name: MasterMixPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      SubProcess_Name: AddAdapter3Mix
    Task Bravo::SubProcess
      SubProcess_Name: AddLigationMix
    Task Bravo::SubProcess
      SubProcess_Name: AddStopSolution
    Task Bravo::SubProcess
      SubProcess_Name: AddAdapter5Mix
  Process
    Plate name: NewTips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      Process to spawn: UsedTips1
    Task Bravo::SubProcess
      SubProcess_Name: AddAdapter3Mix
    Task Bravo::SubProcess
      SubProcess_Name: AddLigationMix
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: NewTips3
  Process
    Plate name: UsedTips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: AddAdapter3Mix
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: NewTips2
  Process
    Plate name: NewTips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: AddLigationMix
    Task Bravo::SubProcess
      SubProcess_Name: AddStopSolution
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: NewTips4
  Process
    Plate name: NewTips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Estimated time: 22
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      SubProcess_Name: AddStopSolution
    Task Bravo::SubProcess
      SubProcess_Name: AddAdapter5Mix
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
  Process
    Plate name: NewTips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: AddAdapter5Mix
  Pipette_Process Name=AddAdapter3Mix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var headMode = "1,3,1," + numberOfColumns;
        var aspVolume = 1;
        var tipSelection = [[1,13-numberOfColumns]];
        var wellSelection = [[1,1]];
        var preAspDist = 30;
        var aspDist = 0.65;
        var dispDist = 0.75;
        var blowOutDist = 7;
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Loop
      Number of times to loop: =numberOfColumns [1]
      Change tips every N times, N = : 1
      Variables
        Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=tipColumn
        Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=dispColumn
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, tipColumn]];
      Location, plate: NewTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 3
      TaskScript:
        task.Volume = preAspVol;
        task.Distancefromwellbottom = preAspDist;
      Location, plate: MasterMixPlate
      Volume: 0
      Distance from well bottom: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Distancefromwellbottom = aspDist;
        task.Volume = aspVolume;
      Location, plate: MasterMixPlate
      Volume: 0
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Distancefromwellbottom = dispDist;
        task.Volume = aspVolume;
      Location, plate: SamplePlate
      Volume: 0
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Mixcycles = mixCycles;
        task.Aspiratedistance = aspDist;
        task.Dispensedistance = 3;
      Location, plate: SamplePlate
      Volume: 4
      Liquid class: j_slow_mixing
      Mix cycles: 3
      Aspirate distance: 0
      Dispense at different distance: 1
      Dispense distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Volume = preAspVol;
        task.Distancefromwellbottom = blowOutDist;
      Location, plate: SamplePlate
      Volume: 0
      Liquid class: j_blowout
      Distance from well bottom: 0
      Perform tip touch: 1
      Tip touch retract distance: =0.75-blowOutDist; [0]
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1, tipColumn]];
      Location, plate: UsedTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if(numberOfColumns === 12) {
        task.skip();
        }
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1, 1]];
        if(numberOfColumns === 12) {
        task.skip();
        }
      Location, plate: NewTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1, 1]];
        if(numberOfColumns === 12) {
        task.skip();
        }
      Location, plate: UsedTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=AddAdapter5Mix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var headMode = "1,3,1," + numberOfColumns;
        var aspVolume = 3;
        var tipSelection = [[1,13-numberOfColumns]];
        var wellSelection = [[1,1]];
        var preAspDist = 30;
        var aspDist = 0.65;
        var dispDist = 0.75;
        var blowOutDist = 9;
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Loop
      Number of times to loop: =numberOfColumns [1]
      Change tips every N times, N = : 1
      Variables
        Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=tipColumn
        Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=dispColumn
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, tipColumn]];
      Location, plate: NewTips4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 3
      TaskScript:
        task.Volume = preAspVol;
        task.Distancefromwellbottom = preAspDist;
      Location, plate: MasterMixPlate
      Volume: 0
      Distance from well bottom: 0
      Well selection: Column=3 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Volume = aspVolume;
        task.Distancefromwellbottom = aspDist;
      Location, plate: MasterMixPlate
      Volume: 0
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0
      Well selection: Column=3 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Volume = aspVolume;
        task.Distancefromwellbottom = dispDist;
      Location, plate: SamplePlate2
      Volume: 0
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 16
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Mixcycles = mixCycles;
        task.Aspiratedistance = aspDist;
        task.Dispensedistance = 3;
      Location, plate: SamplePlate2
      Volume: 10
      Liquid class: j_slow_mixing
      Mix cycles: 3
      Aspirate distance: 0
      Dispense at different distance: 1
      Dispense distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Volume = preAspVol;
        task.Distancefromwellbottom = blowOutDist;
      Location, plate: SamplePlate2
      Volume: 0
      Liquid class: j_blowout
      Distance from well bottom: 0
      Perform tip touch: 1
      Tip touch retract distance: =0.75-blowOutDist [0]
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1, tipColumn]];
      Location, plate: NewTips3
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if(numberOfColumns === 12) {
        task.skip();
        }
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1, 1]];
        if(numberOfColumns === 12) {
        task.skip();
        }
      Location, plate: NewTips4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1, 1]];
        if(numberOfColumns === 12) {
        task.skip();
        }
      Location, plate: NewTips3
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=AddLigationMix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var headMode = "1,3,1," + numberOfColumns;
        var aspVolume = 4;
        var tipSelection = [[1,13-numberOfColumns]];
        var wellSelection = [[1,1]];
        var preAspDist = 30;
        var aspDist = 0.65;
        var dispDist = 0.75;
        var blowOutDist = 7;
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Loop
      Number of times to loop: =numberOfColumns [1]
      Change tips every N times, N = : 1
      Variables
        Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=tipColumn
        Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=dispColumn
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, tipColumn]];
      Location, plate: NewTips2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 3
      TaskScript:
        task.Volume = preAspVol;
        task.Distancefromwellbottom = preAspDist;
      Location, plate: MasterMixPlate
      Volume: 0
      Distance from well bottom: 0
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Volume = aspVolume;
        task.Distancefromwellbottom = aspDist;
      Location, plate: MasterMixPlate
      Volume: 0
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Volume = aspVolume;
        task.Distancefromwellbottom = dispDist;
      Location, plate: SamplePlate
      Volume: 0
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 38
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Mixcycles = mixCycles;
        task.Dispensedistance = 3;
        task.Aspiratedistance = aspDist;
      Location, plate: SamplePlate
      Volume: 8
      Liquid class: j_slow_medium_vol
      Mix cycles: 3
      Aspirate distance: 0
      Dispense at different distance: 1
      Dispense distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Volume = preAspVol;
        task.Distancefromwellbottom = blowOutDist;
      Location, plate: SamplePlate
      Volume: 0
      Liquid class: j_blowout
      Distance from well bottom: 0
      Perform tip touch: 1
      Tip touch retract distance: =0.75-blowOutDist; [0]
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1, tipColumn]]
      Location, plate: NewTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if(numberOfColumns === 12) {
        task.skip();
        }
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1, 1]];
        if(numberOfColumns === 12) {
        task.skip();
        }
      Location, plate: NewTips2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1, 1]];
        if(numberOfColumns === 12) {
        task.skip();
        }
      Location, plate: NewTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      TaskScript:
        if(simulationToggle == true) {
        task.skip();
        }
      Location: 4
      Temperature: 4
      Timeout: 1
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      TaskScript:
        if(simulationToggle == true) {
        task.skip();
        }
      Location: 6
      Temperature: 32
      Timeout: 1
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    Task BuiltIn::Group End
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  Pipette_Process Name=AddStopSolution
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var headMode = "1,3,1," + numberOfColumns;
        var aspVolume = 1;
        var tipSelection = [[1,13-numberOfColumns]];
        var wellSelection = [[1,1]];
        var preAspDist = 30;
        var aspDist = 0.65;
        var dispDist = 0.75;
        var blowOutDist = 7;
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Loop
      Number of times to loop: =numberOfColumns [1]
      Change tips every N times, N = : 1
      Variables
        Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=tipColumn
        Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=dispColumn
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, tipColumn]];
      Location, plate: NewTips3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 3
      TaskScript:
        task.Volume = preAspVol;
        task.Distancefromwellbottom = preAspDist;
      Location, plate: MasterMixPlate
      Volume: 0
      Distance from well bottom: 0
      Well selection: Column=2 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Distancefromwellbottom = aspDist;
        task.Volume = aspVolume;
      Location, plate: MasterMixPlate
      Volume: 0
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0
      Well selection: Column=2 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Volume = aspVolume;
        task.Distancefromwellbottom = dispDist;
      Location, plate: SamplePlate2
      Volume: 0
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 38
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Mixcycles = mixCycles;
        task.Aspiratedistance = aspDist;
        task.Dispensedistance = 3;
      Location, plate: SamplePlate2
      Volume: 8
      Liquid class: j_slow_medium_vol
      Mix cycles: 3
      Aspirate distance: 0
      Dispense at different distance: 1
      Dispense distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = [[1, dispColumn]];
        task.Volume = preAspVol;
        task.Distancefromwellbottom = blowOutDist;
      Location, plate: SamplePlate2
      Volume: 0
      Liquid class: j_blowout
      Distance from well bottom: 0
      Perform tip touch: 1
      Tip touch retract distance: =0.75-blowOutDist; [0]
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1, tipColumn]];
      Location, plate: NewTips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Reserve Location
      TaskScript:
        if(timerSkip == true) {
        task.skip();
        }
      Location to use, plate: SamplePlate2
      Location to use, location: 6
      Reservation time: 870
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      TaskScript:
        if(simulationToggle == true) {
        task.skip();
        }
      Location: 6
      Temperature: 4
      Timeout: 1
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    Task BuiltIn::Reserve Location
      TaskScript:
        if(timerSkip == true) {
        task.skip();
        }
      Location to use, plate: SamplePlate2
      Location to use, location: 4
      Reservation time: 240
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if(numberOfColumns === 12) {
        task.skip();
        }
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1, 1]];
        if(numberOfColumns === 12) {
        task.skip();
        }
      Location, plate: NewTips3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1, 1]];
        if(numberOfColumns === 12) {
        task.skip();
        }
      Location, plate: NewTips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript:
        if(simulationToggle == true) {
        task.Turnofftemperature;
        }
      Location: 6
      Temperature: 4
      Timeout: 1
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
