Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\Full_System_Magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        // Author: Joel Gruselius (joel.gruselius@scilifelab.se), SciLifeLab, 2011-2012, 2015

        // Get the object representing the global namespace:
        var global = GetGlobalObject();
        if(global.runsetMode) global.updateRunset();

        // For testing:
        //open("C:/VWorks Workspace/Protocol Files/facility/truseq/ca_temp.js");
        //if(settings) global.settings = settings;
        //if(formColumns) global.formColumns = formColumns;
        //if(dph) global.dph = dph;

        // Protocol parameters:
        var columns = global.formColumns;
        var beadVolume = global.settings.beadVolume;
        var beadResuspVolume = global.settings.beadResuspVolume;
        var sampleVolume = global.settings.sampleVolume;

        // Dynamic pippetting:
        var dph = global.dph;

        // Not changed atm:
        var rinseVolume = 80;
        var beadWashVolume = 150;
        // Number of times to perform the bead storage buffer removal wash:
        var beadWashRepeats = 1;
        // Magnet incubation time:
        var pelletTime = 60;
        // Magnet incubation time, short:
        var pelletTimeShort = 30;
        // Headmode:
        var headMode = "1,2,1," + columns;
        // Ambient temperature:
        var roomTemp = 20;
        // Max aspiration volume:
        var maxAspVolume = 170;
        // Max volume to use when mixing:
        var maxMixVolume = 160;
        // Temperature of finished sample plate:
        var finalTemp = 20;
        // Pre-aspiration volume:
        var preAsp = 20;
        // Transfer loop vars:
        var stepVolume;
        var aspRepeats;

        // For displaying status:
        global.statusString = "Setting temperature...";
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: task.Temperature = roomTemp;
      Location: 4
      Temperature: 20
      Temperature Tolerance: 2
      Timeout: 10
      Allow concurrent operation: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 3
      TaskScript: task.Temperature = roomTemp;
      Location: 6
      Temperature: 20
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 10
      Allow concurrent operation: 1
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    Task BuiltIn::JavaScript
      TaskScript: global.statusString = "CA bead wash started";
Main_Processes
  Process
    Plate name: Tipbox
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: BeadSource
    Task BuiltIn::Spawn Process
      Process to spawn: Waste
    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Spawn Process
      Process to spawn: ElutionBufferPlate
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: BeadResusp
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: BeadSource
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
  Process
    Plate name: BeadPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: BeadResusp
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: BeadResusp
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: ElutionBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: RinseTips1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: BeadResusp
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: Occupied2
    Plate type: 96 Nunc Deep Well 1 mL
    Use single instance of plate: 1
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Pipette_Process Name=BeadDistribution
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Distributing beads";
    Task Bravo::secondary::Set Head Mode
      Estimated time: 2
      TaskScript:
        // Column 1:
        task.Headmode = "1,2,1,1";
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        // Column 12:
        task.Wellselection = [[1, 12]];
      Location, plate: Tipbox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        // Preaspiration
        task.Volume = preAsp;
      Location, plate: BeadSource
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 26
      TaskScript:
        var mixVolume = 0.7 * (beadVolume * columns);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: BeadSource
      Liquid class: j_normal_mixing
      Mix cycles: 8
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var currentColumn = 1;
        var mixVolume;
    Task BuiltIn::Loop
      Number of times to loop: =columns;
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=currentColumn
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 8
      TaskScript:
        mixVolume = 0.8 * beadVolume * (columns - currentColumn + 1);
        task.Volume = (mixVolume > maxMixVolume)  ? maxMixVolume : mixVolume;
      Location, plate: BeadSource
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript: task.Volume = beadVolume;
      Location, plate: BeadSource
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,currentColumn]];
        task.Volume = beadVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: BeadSource
      Liquid class: j_blowout
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        // Column 12:
        task.Wellselection = [[1, 12]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=BeadResusp
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Resuspending beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 36
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript: task.Volume = preAsp;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 39
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript: task.Volume = beadResuspVolume;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_small_vol
      Distance from well bottom: 10
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript:
        task.Volume = sampleVolume;
        task.Distancefromwellbottom = 0.5;
        task.Dynamictipextension = dph(sampleVolume, 0.5);
      Location, plate: SamplePlate
      Liquid class: j_slow_medium_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript: task.Volume = sampleVolume + beadResuspVolume;
      Location, plate: BeadPlate
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BeadPlate
      Location, location: 5
      Mode: On
      RPM: 1500
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 21
      TaskScript:
        var mixVolume = 0.7 * (beadResuspVolume);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_mixing
      Mix cycles: 10
      Aspirate distance: 1.5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BeadPlate
      Location, location: 5
      Mode: Off
      RPM: 1500
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript: task.Volume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_blowout
      Distance from well bottom: 10
      Perform tip touch: 1
      Tip touch retract distance: -9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Removing bead storage buffer";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, 13 - columns]];
      Location, plate: Tipbox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: BeadPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      TaskScript:
        task.Volume = beadVolume + 50;
        task.Preaspiratevolume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Volume = beadVolume + 5;
        task.Blowoutvolume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        if(maxAspVolume - rinseVolume - 4 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 4;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript:
        if(maxAspVolume - rinseVolume - 10 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 10;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, 13 - columns]];
      Location, plate: Tipbox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        if(maxAspVolume - rinseVolume - 4 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 4;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript:
        if(maxAspVolume - rinseVolume - 10 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 10;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips3
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        if(maxAspVolume - rinseVolume - 4 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 4;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript:
        if(maxAspVolume - rinseVolume - 10 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 10;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1, 13 - columns]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WashBeads1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Washing beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =beadWashRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // Each transfer may have to be done in
        // more than one step if volume is large
        aspRepeats =Math.ceil((beadWashVolume + preAsp + 5) / maxAspVolume);
        stepVolume = beadWashVolume / aspRepeats;
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript: task.Volume= stepVolume;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: task.Volume = stepVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 38
      TaskScript:
        var mixVolume = 0.7 * beadWashVolume;
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_mixing
      Mix cycles: 7
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 10
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: // Blowout
      Location, plate: BeadPlate
      Empty tips: 1
      Volume: 10
      Liquid class: j_blowout
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: BeadPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: BeadPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        // Return tips so not to interfere with plate moving
        task.Wellselection = [[1,13 - columns]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: Cleanup
    Task BuiltIn::JavaScript
      TaskScript: global.statusString = "CA bead wash finished";
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