Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\Device Files\Full_System_Magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        var global = GetGlobalObject();

        // General vars
        var time_mod = global.time_mod;
        // Ambient temperature (deg C):
        var temp_rt = global.temp_rt;
        // Number of columns of samples to process:
        var n_columns = global.n_columns;
        // Pipette head operation mode:
        var head_mode = "1,2,1," + n_columns;
        // Maximum volume to use when mixing (uL):
        var max_mix_vol = 140;
        // Air aspiration volumes (uL):
        var pre_asp_large = 20;
        var pre_asp_medium = 15;
        var pre_asp_small = 8;
        // End repair vars
        // Starting volume of DNA sample (uL):
        var vol_sample = 30;
        // The column where the ligation reaction mix
        // is located in the master mix plate:
        var col_lig_mix = 2;
        // The column where the ligation stop mix
        // is located in the master mix plate:
        var col_lig_stop = 3;
        // Volume of ligation reaction mix (uL):
        var vol_lig_mix = 5;
        // Volume of adapter mix (uL):
        var vol_lig_adp = 2.5;
        // Volume of ligation stop buffer (uL):
        var vol_lig_stop = 5;
        // Ligation reaction incubation temperature (deg C):
        // To compensate for panel-plate temperature differences
        // the set temperature have been calibrated to:
        var temp_lig = 39; // Actual reaction temperature: 30C
        // Ligation reaction incubation time (min):
        var time_lig = 10 * 60 * time_mod;

        var dph = global.dph;

        global.statusString = "Ligation started...";
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: task.Temperature = temp_rt;
      Location: 4
      Temperature: =temp_rt;
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 3
      TaskScript: task.Temperature = temp_rt;
      Location: 6
      Temperature: =temp_rt;
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 10
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Main_Processes
  Process
    Plate name: plate_sample
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      TaskScript:
        // Plate with starting sample
        //plate.labware = platetype_sample;
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: plate_adp
  Process
    Plate name: plate_lig
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript:
        // Plate with reaction mix (buffer/enzymes)
        //plate.labware = platetype_sample;
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: DivideMix
    Task BuiltIn::Spawn Process
      Process to spawn: plate_sample
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample
    Task BuiltIn::Wait For
      Waitfor: signal_sample_plate_cleared
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample2
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
  Process
    Plate name: plate_mastermix
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      TaskScript: // Plate with ligation master mix in column 3 and stop mix in column 4
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      SubProcess_Name: DivideMix
    Task Bravo::SubProcess
      SubProcess_Name: DivideMix2
  Process
    Plate name: plate_adp
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 5
    Task BuiltIn::Place Plate
      TaskScript: // Plate with adapters in each well to use
      Device to use: Bravo - 1
      Location to use: 1
    Task BuiltIn::Signal
      Waitfor: signal_sample_plate_cleared
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample2
    Task BuiltIn::Spawn Process
      Process to spawn: cycler_incubation
      Spawn as subroutine: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample3
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
  Process
    Plate name: plate_stop
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate with ligation stop buffer
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      SubProcess_Name: DivideMix2
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample3
    Task BuiltIn::Spawn Process
      Process to spawn: spin_down
      Spawn as subroutine: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
  Process
    Plate name: tips_mix_new
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
    Task BuiltIn::Place Plate
      TaskScript: // New tipbox for dispensing master mix
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      SubProcess_Name: DivideMix
    Task Bravo::SubProcess
      SubProcess_Name: DivideMix2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: tips_mix_old
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      TaskScript: // Empty tipbox for used master mix tips
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: DivideMix
    Task Bravo::SubProcess
      SubProcess_Name: DivideMix2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: tips_lig
  Process
    Plate name: tips_lig
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // New tips for transfer of sample to ligation reaction mix
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample2
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample3
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
      Task_Disabled: 1
  Process
    Plate name: cycler_incubation
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 1896971642l
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Block Type: 96
      Program: 3,8,rna-lig
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: spin_down
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 1897150669l
        Spin task Type: 1
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Pipette_Process Name=DivideMix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = vol_lig_mix;	// Volume to dispense per well
        var maxTipVolume = 170;	// Tip capacity
        var columns = n_columns;		// Total number of columns to process
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 4;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        // Last column of tips:
        task.Wellselection = [[1,col_lig_mix]];
      Location, plate: tips_mix_new
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = [[1,col_lig_mix]];
        if(aspirateSteps === 1) {
        	task.Distancefromwellbottom = 0.3;
        	task.Dynamictipextension = dph(tipVolume, 0.3);
        }
      Location, plate: plate_mastermix
      Volume: =tipVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: plate_lig
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_small_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = [[1,col_lig_mix]];
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: plate_mastermix
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      TaskScript:
        // Next free column of empty tip box:
        task.Wellselection = [[1,13-col_lig_mix]];
      Location, plate: tips_mix_old
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::User Message
      Task_Disabled: 1
      Title: Check reagents
      Body: Confirm that there is 5 uL liquid in the plates at pos 5 and 6.
      Pause process: 1
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    Task BuiltIn::Group End
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  Pipette_Process Name=DivideMix2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = vol_lig_stop;	// Volume to dispense per well
        var maxTipVolume = 170;	// Tip capacity
        var columns = n_columns;		// Total number of columns to process
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 4;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        // Last column of tips:
        task.Wellselection = [[1,col_lig_stop]];
      Location, plate: tips_mix_new
      Well selection: Column=2 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = [[1,col_lig_stop]];
        if(aspirateSteps === 1) {
        	task.Distancefromwellbottom = 0.3;
        	task.Dynamictipextension = dph(tipVolume, 0.3);
        }
      Location, plate: plate_mastermix
      Volume: =tipVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: plate_stop
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_small_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = [[1,col_lig_stop]];
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: plate_mastermix
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      TaskScript:
        // Next free column of empty tip box:
        task.Wellselection = [[1,13-col_lig_stop]];
      Location, plate: tips_mix_old
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::User Message
      Task_Disabled: 1
      Title: Check reagents
      Body: Confirm that there is 5 uL liquid in the plates at pos 5 and 6.
      Pause process: 1
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferSample
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1, 13 - n_columns]];
      Location, plate: tips_lig
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript: task.Volume = pre_asp_large;
      Location, plate: plate_sample
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 25
      TaskScript:
        task.Volume = vol_sample;
        task.Distancefromwellbottom = 0.5;
        task.Dynamictipextension = dph(vol_sample, 0.5);
      Location, plate: plate_sample
      Liquid class: j_slow_small_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: task.Volume = vol_sample;
      Location, plate: plate_lig
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 22
      TaskScript:
        var mix_vol = 0.8 * (vol_sample + vol_lig_mix);
        if(mix_vol > max_mix_vol) {
        	mix_vol = max_mix_vol;
        }
        task.Volume = mix_vol;
      Location, plate: plate_lig
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 8
      TaskScript:
        // Remove bubbles
        task.Volume = 0.9 * (vol_sample + vol_lig_mix);
      Location, plate: plate_lig
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 10
      TaskScript:
        // Remove bubbles
        task.Volume = 0.9 * (vol_sample + vol_lig_mix);
        task.Dynamictipretraction = 4 / (0.9 * (vol_sample + vol_lig_mix));
      Location, plate: plate_lig
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        // Blowout
        task.Volume = pre_asp_large;
      Location, plate: plate_lig
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        task.skip();
        task.Wellselection = [[1, 13 - n_columns]];
      Location, plate: tips_lig
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferSample2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        task.skip();
        task.Wellselection = [[1, 13 - n_columns]];
      Location, plate: tips_lig
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript: task.Volume = pre_asp_large;
      Location, plate: plate_lig
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 27
      TaskScript:
        task.Volume = vol_sample + vol_lig_mix;
        task.Distancefromwellbottom = 0.5;
        task.Dynamictipextension = dph(vol_sample + vol_lig_mix, 0.5);
      Location, plate: plate_lig
      Liquid class: j_slow_small_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: task.Volume = vol_sample + vol_lig_mix;
      Location, plate: plate_adp
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 22
      TaskScript:
        var mix_vol = 0.8 * (vol_sample + vol_lig_mix + vol_lig_adp);
        if(mix_vol > max_mix_vol) {
        	mix_vol = max_mix_vol;
        }
        task.Volume = mix_vol;
      Location, plate: plate_adp
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 8
      TaskScript:
        // Remove bubbles
        task.Volume = 0.9 * (vol_sample + vol_lig_mix + vol_lig_adp);
      Location, plate: plate_adp
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 11
      TaskScript:
        // Remove bubbles
        task.Volume = 0.9 * (vol_sample + vol_lig_mix + vol_lig_adp);
        task.Dynamictipretraction = 4 / (0.9 * (vol_sample + vol_lig_mix + vol_lig_adp));
      Location, plate: plate_adp
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        // Blowout
        task.Volume = pre_asp_large;
      Location, plate: plate_adp
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, 13 - n_columns]];
      Location, plate: tips_lig
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferSample3
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      TaskScript: task.Temperature = temp_rt;
      Location: 4
      Temperature: =temp_rt;
      Timeout: 1
      Allow concurrent operation: 1
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    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1, 13 - n_columns]];
      Location, plate: tips_lig
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript: task.Volume = pre_asp_large;
      Location, plate: plate_adp
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 28
      TaskScript:
        task.Volume = vol_sample + vol_lig_mix + vol_lig_adp;
        task.Distancefromwellbottom = 0.5;
        task.Dynamictipextension = dph(vol_sample + vol_lig_mix + vol_lig_adp, 0.5);
      Location, plate: plate_adp
      Liquid class: j_slow_small_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: task.Volume = vol_sample + vol_lig_mix + vol_lig_adp;
      Location, plate: plate_stop
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 24
      TaskScript:
        var mix_vol = 0.8 * (vol_sample + vol_lig_mix + vol_lig_adp + vol_lig_stop);
        if(mix_vol > max_mix_vol) {
        	mix_vol = max_mix_vol;
        }
        task.Volume = mix_vol;
      Location, plate: plate_stop
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 10
      TaskScript:
        // Remove bubbles
        task.Volume = 0.9 * (vol_sample + vol_lig_mix + vol_lig_adp + vol_lig_stop);
      Location, plate: plate_stop
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 12
      TaskScript:
        // Remove bubbles
        task.Volume = 0.9 * (vol_sample + vol_lig_mix + vol_lig_adp + vol_lig_stop);
        task.Dynamictipretraction = 4 / (0.9 * (vol_sample + vol_lig_mix + vol_lig_adp + vol_lig_stop));
      Location, plate: plate_stop
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        // Blowout
        task.Volume = pre_asp_large;
      Location, plate: plate_stop
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, 13 - n_columns]];
      Location, plate: tips_lig
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: ResetTemp
    Task BuiltIn::JavaScript
      TaskScript:
        global.updateSettings("ligation");
        global.statusString = "Ligation completed";
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